[[model]]
author: Chon Lok Lei
name: compensated_voltage_clamp_mc
desc: """
Myokit version of the Type-I Model Cell (mc) model under a realistic voltage
clamp model with standard compensation.

Units:
    time in [ms]
    voltage in [mV]
    current in [pA]
    capacitance in [pF]
    resistance in [GOhm]
"""

# Initial values
mc.Icc = 0 [pA]  # Current leaked through Rs, Cprs connected to the CC.
membrane.V = 0.0 [mV]
voltageclamp.Vclamp = 0.0 [mV]
voltageclamp.Vp = 0.0 [mV]
voltageclamp.Vest = 0.0 [mV]
voltageclamp.Iout = 0.0 [mV]


[mc]
use membrane.V, membrane.dVdt
I = g * V + Icc in [pA]
g = 0.1524 * 1e3 [pA/mV]  # in nA range
dot(Icc) = voltageclamp.rseries * (dVdt - Icc / voltageclamp.cprs)
    in [pA]


[engine]
time = 0 bind time
    in [ms]
pace = 0 bind pace


[membrane]
use voltageclamp.Vp, voltageclamp.rseries, voltageclamp.voffset_eff
cm = 100.0 [pF]  # in order of pF; TODO: fit
dot(V) = dVdt in [mV]
dVdt = (Vp - V + voffset_eff) / tau - mc.I / cm
    tau = cm * rseries in [ms]
    desc: membane potential
    in [mV/ms]

[voltageclamp]
use membrane.V
rseries = 10.0 * 1e-3 [GR]  # in order of MegaOhms; TODO: fit
cprs = 4.0 [pF]  # Unknown value for 'parasitic' capacitance at electrode...
cprs_est = 4.0 * 0.9 [pF]  # eff. parasitic capacitance at electrode; TODO: fit
voffset_eff = 5 [mV]  # TODO: fit
rseries_est = 0.9 * 10.0e-3 [GR]  # TODO: later this one use measured value
cm_est = 0.9 * 100.0 [pF]  # TODO: similar to rseries_est, set value
alpha = 0.8 [1]  # NOTE: percentage of compensation, this is included in rseries_est already

# Command voltage
Vc = engine.pace
    desc: command voltage
    in [mV]

# Rs compensation and summing delay
tau_sum = 40e-3 in [ms]  # electronic delay term, ~ 5 - 70 microsecond
dVclampdt = (Vc + (Iout + cm_est * dVestdt) * rseries_est - Vclamp) / tau_sum
    in [mV/ms]
dot(Vclamp) = dVclampdt
    desc: clamp voltage
    in [mV]

# Supercharging
dVestdt = piecewise(
    cm_est < 1e-6, 0,
    rseries_est < 1e-6, 0,
    (Vc - Vest) / ((1 - alpha) * cm_est * rseries_est/alpha)
) in [mV/ms]
dot(Vest) = dVestdt
    in [mV]

# Amplifier delay
tau_clamp = 0.8 * 1e-3 in [ms]
dVpdt = (Vclamp - Vp) / tau_clamp in [mV/ms]
dot(Vp) = dVpdt
    desc: pipette voltage
    in [mV]

# Feedback delay
dot(Iout) = (Iin - Iout) / tau
    tau = 7.5 * 1e-3 in [ms]
    desc: measured current
    in [pA]

Iin = (
        (Vp - V + voffset_eff) / rseries
        + cprs * dVpdt
        - cprs_est * dVclampdt
        - cm_est * if(rseries_est < 1e-6, dVclampdt, dVestdt)
    )
    in [pA]
