[[model]]
author: Chon Lok Lei
name: compensated_voltage_clamp_mc3
desc: """
Myokit version of the Type-II Model Cell (mc3) model under a realistic
voltage clamp model with standard compensation.

Units:
    time in [ms]
    voltage in [mV]
    current in [pA]
    capacitance in [pF]
    resistance in [GOhm]
"""

# Initial values
membrane.V = 0.0 [mV]
mc.Ik = 0 [pA]
#mc.Icc = 0 [pA]  # Current leaked through Rs, Cprs connected to the CC.
voltageclamp.Vclamp = 0.0 [mV]
voltageclamp.Vp = 0.0 [mV]
voltageclamp.Vest = 0.0 [mV]
voltageclamp.Iout = 0.0 [mV]


[mc]
use membrane.dVdt, membrane.V
dot(Ik) = gk * (dVdt - Ik / ck)
    in [pA]
ck = 100. in [pF]  # for decay rate ~10 ms
gk = 1e2 [pA/mV]  # in O(5000) pA range
Im = gm * V in [pA]
gm = 1e1 [pA/mV]  # in O(5000) pA range
#dot(Icc) = voltageclamp.rseries * (dVdt - Icc / voltageclamp.cprs)
#    in [pA]
I = Ik + Im #+ Icc
    desc: model cell current
    in [pA]


[engine]
time = 0 bind time
    in [ms]
pace = 0 bind pace


[membrane]
use voltageclamp.Vp, voltageclamp.rseries, voltageclamp.voffset_eff
cm = 44.0 [pF]  # in order of pF; TODO: fit
dot(V) = dVdt in [mV/ms]
dVdt = (Vp - V + voffset_eff) / tau - mc.I / cm
    tau = cm * rseries in [ms]
    desc: membane potential
    in [mV]

[voltageclamp]
use membrane.V
# Parameters
rseries = 30.0 * 1e-3 [GR]  # in order of MegaOhms; TODO: fit
cprs = 4.7 [pF]  # Unknown value for 'parasitic' capacitance at electrode...
cprs_est = 4.7 * 0.9 [pF]  # eff. parasitic capacitance at electrode; TODO: fit
voffset_eff = 0 [mV]  # TODO: fit
rseries_est = 0.9 * 30.0e-3 [GR]  # TODO: later this one use measured value
cm_est = 0.9 * 44.0 [pF]  # TODO: similar to rseries_est, set value
alpha_r = 0.8 [1]  # Percentage of Rs compensation
alpha_p = 0.8 [1]  # Percentage of prediction/supercharging

# Command voltage
Vc = engine.pace
    desc: command voltage
    in [mV]

# Rs compensation and summing delay
tau_sum = 40e-3 in [ms]  # electronic delay term, ~ 5 - 70 microsecond
dVclampdt = (Vc + (Iout * alpha_r + cm_est * dVestdt * alpha_p) * rseries_est - Vclamp) / tau_sum
    in [mV/ms]
dot(Vclamp) = dVclampdt
    desc: clamp voltage
    in [mV]

# Supercharging
dVestdt = piecewise(
    cm_est < 1e-6, 0,
    rseries_est < 1e-6, 0,
    (Vc - Vest) / ((1 - alpha_p) * cm_est * rseries_est)
) in [mV/ms]
dot(Vest) = dVestdt
    in [mV]

# Amplifier delay
tau_clamp = 0.8 * 1e-3 in [ms]
dVpdt = (Vclamp - Vp) / tau_clamp in [mV/ms]
dot(Vp) = dVpdt
    desc: pipette voltage
    in [mV]

# Feedback delay
dot(Iout) = (Iin - Iout) / tau
    tau = 7.5 * 1e-3 in [ms]
    desc: measured current
    in [pA]

Iin = (
        (Vp - V + voffset_eff) / rseries
        + cprs * dVpdt
        - cprs_est * dVclampdt
        - cm_est * if(rseries_est < 1e-6, dVclampdt, dVestdt)
    )
    in [pA]
